# MRCP_TOPAS

s:Ge/MyBox/Type     = "TOPAS_MRCP"
s:Ge/MyBox/Material = "Air"
s:Ge/MyBox/Parent   = "World"
s:Ge/MyBox/Path	    = "/Applications/workspace/topas/topas_extensions/TOPAS_MRCP/Phantoms/Liver"
s:Ge/MyBox/Sex      = "M"

b:Ge/CheckForOverlaps = "False"
b:Ge/CheckInsideEnvelopesForOverlaps = "False"

s:Gr/ViewA/Type             = "OpenGL"
i:Gr/ViewA/WindowSizeX      = 1024
i:Gr/ViewA/WindowSizeY      = 768
b:Gr/ViewA/IncludeAxes      = "True"
d:Gr/ViewA/Theta            = 91 deg
d:Gr/ViewA/Phi              = 90 deg
s:Gr/ViewA/Projection       = "Perspective"
d:Gr/ViewA/PerspectiveAngle = 0 deg
u:Gr/ViewA/Zoom             = 5.
b:Gr/ViewA/CopyOpenGLToPDF = "True"
d:Gr/ViewA/AxesSize = 1. m

s:So/MRCPsource/Type                     = "Beam"
s:So/MRCPsource/Component                = "BeamPosition"
s:So/MRCPsource/BeamParticle             = "gamma"
d:So/MRCPsource/BeamEnergy               = 1. MeV
u:So/MRCPsource/BeamEnergySpread         = 0.
s:So/MRCPsource/BeamPositionCutoffShape  = "Ellipse"
s:So/MRCPsource/BeamPositionDistribution = "Flat"
d:So/MRCPsource/BeamPositionCutoffX      = 90. cm
d:So/MRCPsource/BeamPositionCutoffY      = 90. cm
s:So/MRCPsource/BeamAngularDistribution  = "None"

s:Ge/BeamPosition/Parent= "World"
s:Ge/BeamPosition/Type= "Group"
d:Ge/BeamPosition/TransX= 0. m
d:Ge/BeamPosition/TransY= -1. m
d:Ge/BeamPosition/TransZ= 0. m
d:Ge/BeamPosition/RotX= 90. deg
i:So/MRCPsource/NumberOfhistoriesInRun = 10

sv:Ph/Default/Modules = 1 "g4em-livermore"

s:Sc/EnergyDePAtPhantom/Quantity                  = "EnergyDeposit"
s:Sc/EnergyDepAtPhantom/Component                 = "MyBox"
b:Sc/EnergyDepAtPhantom/OutputToConsole           = "TRUE"
s:Sc/EnergyDepAtPhantom/IfOutputFileAlreadyExists = "Overwrite"

b:Ts/PauseBeforeQuit = "True"